PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = delay discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', np.int64(11)), ('future_reward', np.int64(30)), ('delay', np.int64(7))]),
      OrderedDict([('reward_today', np.int64(15)), ('future_reward', np.int64(35)), ('delay', np.int64(13))]),
      OrderedDict([('reward_today', np.int64(27)), ('future_reward', np.int64(50)), ('delay', np.int64(21))]),
      OrderedDict([('reward_today', np.int64(40)), ('future_reward', np.int64(55)), ('delay', np.int64(62))]),
      OrderedDict([('reward_today', np.int64(49)), ('future_reward', np.int64(60)), ('delay', np.int64(89))]),
      OrderedDict([('reward_today', np.int64(67)), ('future_reward', np.int64(75)), ('delay', np.int64(119))]),
      OrderedDict([('reward_today', np.int64(78)), ('future_reward', np.int64(80)), ('delay', np.int64(162))]),
      OrderedDict([('reward_today', np.int64(11)), ('future_reward', np.int64(57)), ('delay', np.int64(1))]),
      OrderedDict([('reward_today', np.int64(63)), ('future_reward', np.int64(88)), ('delay', np.int64(1))]),
      OrderedDict([('reward_today', np.int64(80)), ('future_reward', np.int64(112)), ('delay', np.int64(1))]),
      OrderedDict([('reward_today', np.int64(29)), ('future_reward', np.int64(52)), ('delay', np.int64(2))]),
      OrderedDict([('reward_today', np.int64(33)), ('future_reward', np.int64(81)), ('delay', np.int64(2))]),
      OrderedDict([('reward_today', np.int64(79)), ('future_reward', np.int64(131)), ('delay', np.int64(2))]),
      OrderedDict([('reward_today', np.int64(13)), ('future_reward', np.int64(20)), ('delay', np.int64(3))])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
    Routine trial
  LoopTerminator trials
