PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10 )
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b','g','y'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Use keys: 'r', 'g', 'b' or 'y' to indicate ink colour of the word

        Press 'SPACEBAR' to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_You
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for participating!
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_emostroop.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('word', 'LOVE'), ('colour', 'red'), ('stim_condition', 'C'), ('correct_resp', 'r'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'LOVE'), ('colour', 'blue'), ('stim_condition', 'I'), ('correct_resp', 'b'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'PEACE'), ('colour', 'blue'), ('stim_condition', 'C'), ('correct_resp', 'b'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'PEACE'), ('colour', 'red'), ('stim_condition', 'I'), ('correct_resp', 'r'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'JOY'), ('colour', 'yellow'), ('stim_condition', 'C'), ('correct_resp', 'y'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'JOY'), ('colour', 'red'), ('stim_condition', 'I'), ('correct_resp', 'r'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'ANGER'), ('colour', 'red'), ('stim_condition', 'C'), ('correct_resp', 'r'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'ANGER'), ('colour', 'yellow'), ('stim_condition', 'I'), ('correct_resp', 'y'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'SADNESS'), ('colour', 'blue'), ('stim_condition', 'C'), ('correct_resp', 'b'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'SADNESS'), ('colour', 'green'), ('stim_condition', 'I'), ('correct_resp', 'g'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'DANGER'), ('colour', 'red'), ('stim_condition', 'C'), ('correct_resp', 'r'), ('stim_wordtype', 'E')]),
      OrderedDict([('word', 'DANGER'), ('colour', 'blue'), ('stim_condition', 'I'), ('correct_resp', 'b'), ('stim_wordtype', 'E')])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
    Routine trial
  LoopTerminator trials
  Routine Thank_You
